PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = emoreg
  keyboardBackend = ioHub
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Routines
  Routine baseline
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    PolygonComponent baseline_fixation
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine trial
    CodeComponent set_img_size
      Code Type = Auto->JS
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      Begin Routine:
        defaultFixPos=[0, -0.20]
    PolygonComponent pre_stim_fix
      fillColor = white
      pos [set every repeat] = defaultFixPos
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent stim
      image [set every repeat] = $stim_path
      pos = (0, -0.25)
      size [set every repeat] = (0.7,None)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 4.0
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    PolygonComponent pre_face_fix
      fillColor = white
      pos [set every repeat] = defaultFixPos
      shape = cross
      size = (0.05, 0.05)
      startVal [condition] = $stim.status==FINISHED
      stopVal [duration (s)] = $ISI/1000
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    ImageComponent neutral_face
      image [set every repeat] = $face_path
      pos = (0, -0.15)
      size = (0.6,None)
      startVal [condition] = $pre_face_fix.status==FINISHED
      stopVal [duration (s)] = 0.5
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    TextboxComponent intertrial_interval
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [condition] = $neutral_face.status==FINISHED
      stopVal [duration (s)] = $ITI/1000
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Flow
  Routine baseline
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stim_path', './stims/pln_06_f.jpg'), ('face_path', './faces/1.jpg'), ('intertrial_interval', 4.2)]),
      OrderedDict([('stim_path', './stims/pln_11_f.jpg'), ('face_path', './faces/2.jpg'), ('intertrial_interval', 5.3)]),
      OrderedDict([('stim_path', './stims/pln_14_d.jpg'), ('face_path', './faces/3.jpg'), ('intertrial_interval', 4.8)]),
      OrderedDict([('stim_path', './stims/pls_05_b.jpg'), ('face_path', './faces/4.jpg'), ('intertrial_interval', 7.4)]),
      OrderedDict([('stim_path', './stims/pls_06_f.jpg'), ('face_path', './faces/5.jpg'), ('intertrial_interval', 4.0)]),
      OrderedDict([('stim_path', './stims/pls_06_l.jpg'), ('face_path', './faces/6.jpg'), ('intertrial_interval', 7.8)]),
      OrderedDict([('stim_path', './stims/suf_07_g.jpg'), ('face_path', './faces/7.jpg'), ('intertrial_interval', 7.4)]),
      OrderedDict([('stim_path', './stims/suf_08_a.jpg'), ('face_path', './faces/8.jpg'), ('intertrial_interval', 6.2)]),
      OrderedDict([('stim_path', './stims/suf_12_h.jpg'), ('face_path', './faces/9.jpg'), ('intertrial_interval', 6.5)]),
      OrderedDict([('stim_path', './stims/thr_10_e.jpg'), ('face_path', './faces/10.jpg'), ('intertrial_interval', 5.3)])]
    Routine trial
  LoopTerminator trials
